PsychoPy2experiment version="2022.2.5"
Settings
  Completed URL = https://app.prolific.com/submissions/complete?cc=178A6A7B
  Experiment info = {'participant': '', 'list': '', 'Your Age in Years (optional)': '', 'Computer Age in Years (optional)': '', 'What browser are you using? (optional)': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2022.1.4
  Window size (pixels) = [1440, 900]
  expName = exp_4_spr
  keyboardBackend = Pyglet
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Routines
  Routine CHUNK1
    TextComponent CHUNK1TEXT
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      text [set every repeat] = $CHUNK1
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    KeyboardComponent CHUNK1KEYS
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine CHUNK2
    TextComponent CHUNK2TEXT
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      text [set every repeat] = $CHUNK2
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    KeyboardComponent CHUNK2KEYS
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine CHUNK3
    TextComponent CHUNK3TEXT
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      text [set every repeat] = $CHUNK3
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    KeyboardComponent CHUNK3KEYS
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine CHUNK4
    CodeComponent CHUNK4Code
      Code Type = Auto->JS
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      Begin Routine:
        if RestrictorType == "NIL":
            continueRoutine = False
    TextComponent CHUNK4TEXT
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      text [set every repeat] = $CHUNK4
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    KeyboardComponent CHUNK4KEYS
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine SPILL_OVER
    TextComponent SpillText
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      text [set every repeat] = $spill_region
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    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent ContinueSpillText
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = PRESS SPACEBAR TO MOVE ON
      wrapWidth = 1.5
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  Routine CONTEXT
    TextComponent ContextText
      letterHeight = 0.06
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Context
      wrapWidth = 1.2
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    TextComponent ContinueContextText
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = PRESS SPACEBAR TO MOVE ONTO THE SENTENCE
      wrapWidth = 1.5
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    KeyboardComponent ContextKeys
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine FIXATION
    TextComponent FIXATIONTEXT
      letterHeight = 0.09
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = +
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  Routine INSTRUCTIONS
    TextComponent InstructionsText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = In this experiment, you'll read 120 sentences about people's holiday experiences. Each sentence was written by a different person. You'll first see a short paragraph that will set the scene for the sentence you're about to read. You'll then use the SPACEBAR to reveal each sentence piece-by-piece. When you've finished reading each sentence, you'll press the SPACEBAR again to move on. After every sentence, there'll be a comprehension question, so be sure to pay attention. To answer the questions, use the F and J keys as indicated under the response options. Try to read the sentences at your normal reading speed. Don't worry if you get lost or confused - just keep reading! You'll first complete six practice trials. Then you'll move onto the experiment.
      wrapWidth = 1.6
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    TextComponent InstructionsContinue
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = PRESS SPACEBAR TO CONTINUE
      wrapWidth = 1.5
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine COMPQ
    TextComponent COMPQTEXT
      letterHeight = 0.05
      pos = (0, .1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $comp_q
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    TextComponent COMPLEFT
      letterHeight = 0.05
      pos = (-.4, -.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $comp_left + "\n F"
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    TextComponent COMPRIGHT
      letterHeight = 0.05
      pos = (.4, -.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $comp_right + "\n J"
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    KeyboardComponent COMPKEYS
      allowedKeys = 'f', 'j'
      correctAns = $comp_correct
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine PRETRIAL
    CodeComponent trialNcode
      Code Type = Auto->JS
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      Begin Experiment:
        idx = 1
    TextComponent trialN
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $"GET READY FOR SENTENCE" + " " + str(idx) + "/120"
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  Routine blankRoutineSentenceCount
    CodeComponent blankcode
      Code Type = Auto->JS
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      Begin Routine:
        idx = idx + 1
  Routine breakRoutine
    TextComponent breakText
      letterHeight = 0.08
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = You now have the option to take a break.
      wrapWidth = 1.6
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    TextComponent breakContinueText
      letterHeight = 0.08
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = PRESS SPACEBAR TO CONTINUE THE EXPERIMENT
      wrapWidth = 1.6
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    CodeComponent breakCode
      Code Type = Auto->JS
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      Each Frame:
        if idx == 41 or idx == 81:
            continueRoutine = True
        else:
            continueRoutine = False
    KeyboardComponent breakSpacebar
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine thanksRoutine
    TextComponent thanksText
      letterHeight = 0.08
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
      text = Thank you for taking part in this study. If you would like to learn more about this study, please contact the experimenter directly.
      wrapWidth = 1.6
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    TextComponent closeWindowText
      letterHeight = 0.08
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
      text = The experiment will end automatically and you will be redirected. Please wait…
      wrapWidth = 1.6
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  Routine INIT
    CodeComponent code_JS
      Code Type = JS
      disabled = True
      Before JS Experiment:
        getBrowserId = function() {
            var sUsrAg
            var nIdx
            var browsers = ["Edge", "Firefox", "Safari", "Chrome", "Opera"];
            sUsrAg = window.navigator.userAgent,
            nIdx = browsers.length - 1;
            for (nIdx; nIdx > -1 && sUsrAg.indexOf(browsers [nIdx]) === -1; nIdx--);

          return browsers[nIdx];
        }

        psychoJS.experiment.addData("Browser", getBrowserId())
  Routine BEGIN_EXP
    TextComponent beginText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = It's now time for the experiment itself. Get comfy and get ready to begin.
      wrapWidth = 1.6
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    TextComponent beginSpaceText
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = PRESS SPACEBAR TO CONTINUE
      wrapWidth = 1.5
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    KeyboardComponent beginKeys
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine PRETRIAL_PRAC
    TextComponent trialN_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = GET READY FOR PRACTICE SENTENCE
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  Routine fback_routine
    CodeComponent fbackCode
      Code Type = Auto->JS
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      Each Frame:
        if COMPKEYS.corr:
            continueRoutine = False
    TextComponent fback_text
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      text [set every repeat] = INCORRECT!
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    TextComponent add_fback_text
      letterHeight = 0.05
      pos = (0, -.3)
      startVal [time (s)] = 0.0
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      text:
        Remember: you need to answer the question based on the sentence you just read!

        PRESS SPACEBAR TO CONTINUE
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fback_routine_exp
    CodeComponent fbackCode_2
      Code Type = Auto->JS
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      Each Frame:
        if COMPKEYS.corr:
            continueRoutine = False
    TextComponent fback_text_2
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      text [set every repeat] = INCORRECT!
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    TextComponent add_fback_text_2
      letterHeight = 0.05
      pos = (0, -.3)
      startVal [time (s)] = 0.0
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      text:
        Remember: you need to answer the question based on the sentence you just read!

        PRESS SPACEBAR TO CONTINUE
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine INSTRUCTIONS
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = practice.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('stim_id', 'p1'), ('stim_type', 'prac'), ('em_restr', 'in Japan'), ('nem_restr', 'in Indonesia'), ('spill_region', 'so I decided to go there.'), ('restr_type', 'country'), ('has_comp', 1.0), ('comp_q', 'What did I want to find?'), ('comp_left', 'exciting festivals'), ('comp_right', 'exciting eateries'), ('comp_correct', 'j'), ('Context', 'I was flicking through a holiday brochure to find exciting eateries in Japan and other countries.'), ('CHUNK1', 'Every'), ('CHUNK2', 'eatery'), ('CHUNK3', 'in Japan'), ('CHUNK4', 'seemed exciting,')]),
      OrderedDict([('stim_id', 'p2'), ('stim_type', 'prac'), ('em_restr', 'in Durham'), ('nem_restr', 'in Florence'), ('spill_region', 'so I booked straightaway.'), ('restr_type', 'city'), ('has_comp', 'NQ'), ('comp_q', 'NQ'), ('comp_left', 'NQ'), ('comp_right', 'NQ'), ('comp_correct', 'NQ'), ('Context', 'I was on a website trying to find modern bars to drink at in Durham and other cities.'), ('CHUNK1', 'Every'), ('CHUNK2', 'bar'), ('CHUNK3', 'looked modern'), ('CHUNK4', 'in Florence,')]),
      OrderedDict([('stim_id', 'p3'), ('stim_type', 'prac'), ('em_restr', 'in Pakistan'), ('nem_restr', 'in Thailand'), ('spill_region', 'so there was plenty of choice.'), ('restr_type', 'country'), ('has_comp', 1.0), ('comp_q', 'What did I want inspiration for?'), ('comp_left', 'cheap tours'), ('comp_right', 'luxury tours'), ('comp_correct', 'f'), ('Context', 'I was watching a vlog for inspiration for cheap tours in Pakistan and other countries.'), ('CHUNK1', 'Every'), ('CHUNK2', 'tour'), ('CHUNK3', 'seemed cheap'), ('CHUNK4', 'in Thailand,')]),
      OrderedDict([('stim_id', 'p4'), ('stim_type', 'prac'), ('em_restr', 'in Cardiff'), ('nem_restr', 'in Wales'), ('spill_region', 'so I really enjoyed it.'), ('restr_type', 'city_country'), ('has_comp', 'NQ'), ('comp_q', 'NQ'), ('comp_left', 'NQ'), ('comp_right', 'NQ'), ('comp_correct', 'NQ'), ('Context', "I'm just back from a lovely two-week stay in Cardiff. I'm really pleased! Apparently,"), ('CHUNK1', 'I went to'), ('CHUNK2', 'the smallest'), ('CHUNK3', 'cafe'), ('CHUNK4', 'in Wales,')])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
    Routine PRETRIAL_PRAC
    Routine FIXATION
    Routine CONTEXT
    Routine CHUNK1
    Routine CHUNK2
    Routine CHUNK3
    Routine CHUNK4
    Routine SPILL_OVER
    Routine COMPQ
    Routine fback_routine
  LoopTerminator trials
  Routine BEGIN_EXP
  LoopInitiator trialsLoop loopType="TrialHandler"
    conditionsFile = $'list'+expInfo['list']+'.csv'
    loopType = random
    nReps = 1
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    Routine PRETRIAL
    Routine FIXATION
    Routine CONTEXT
    Routine CHUNK1
    Routine CHUNK2
    Routine CHUNK3
    Routine CHUNK4
    Routine SPILL_OVER
    Routine blankRoutineSentenceCount
    Routine COMPQ
    Routine fback_routine
    Routine breakRoutine
  LoopTerminator trialsLoop
  Routine thanksRoutine
